PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = eeg_speech_sing_2
  keyboardBackend = PsychToolbox
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Routines
  Routine Rest
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
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      text:
        Thank you!

        30 sec rest
  Routine SpeechRepBlock1
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    SoundComponent wordPresSpeechRep
      sound [set every repeat] = $file
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSpeechRep
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent buttonSpeechRep
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
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  Routine SpeechGenBlock1
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    SoundComponent wordPresSpeechGen
      sound = $file
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSpeechGen
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    ButtonComponent buttonSpeechGen
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
      text = Click here
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  Routine SongRepBlock1
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    SoundComponent wordPresSongRep
      sound = $file
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSongRep
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent buttonSongRep
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
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  Routine SongGenBlock1
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    SoundComponent wordPresSongGen
      sound = $file
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSongGen
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent buttonSongGen
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
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  Routine SpeechRepBlock2
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    SoundComponent wordPresSpeechRep_2
      sound = $file
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSpeechRep_2
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent buttonSpeechRep_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
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  Routine SpeechGenBlock2
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    SoundComponent wordPresSpeechGen_2
      sound = $file
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSpeechGen_2
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    ButtonComponent buttonSpeechGen_2
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      size = (0.5, 0.5)
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
      text = Click here
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  Routine SongRepBlock2
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    SoundComponent wordPresSongRep_2
      sound = $file
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSongRep_2
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent buttonSongRep_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
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  Routine SongGenBlock2
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    SoundComponent wordPresSongGen_2
      sound = $file
      startVal [time (s)] = 1
      stopVal [duration (s)] = 2
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    MicrophoneComponent micResponseSongGen_2
      channels = auto
      device = None
      maxSize = 24000
      outputType = default
      sampleRate = DVD Audio (48kHz)
      speakTimes = True
      startVal [time (s)] = 1
      stopVal [duration (s)] = 6
      transcribe = False
      transcribeBackend = Whisper
      transcribeLang = en-US
      transcribeWhisperModel = base
      trimSilent = False
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    KeyboardComponent buttonSongGen_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 7
      stopVal [duration (s)] = 0.5
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  Routine Instruction_SpeechRep1
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  Routine Instruction_SpeechGen1
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  Routine Instruction_SongRep1
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  Routine Instruction_SongGen1
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  Routine Instruction_SpeechRep2
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  Routine Instruction_SpeechGen2
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  Routine Instruction_SongRep2
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  Routine Instruction_SongGen2
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  Routine Finish
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  Routine Instruction_Start
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        Instructions for the whole experiment
Flow
  Routine Instruction_Start
  LoopInitiator trials_1_block1 loopType="TrialHandler"
    conditionsFile = words_correct_speak_Repetition_Block1.csv
    loopType = random
    nReps = 105
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    conditions:
      [OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x098adorable.wav'), ('word', 'adorable'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x096adult.wav'), ('word', 'adult'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x002alcoholic.wav'), ('word', 'alcoholic'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x090alive.wav'), ('word', 'alive'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x103ancient.wav'), ('word', 'ancient'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x071animate.wav'), ('word', 'animate'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x073atypical.wav'), ('word', 'atypical'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x032background.wav'), ('word', 'background'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x015beauty.wav'), ('word', 'beauty'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x008black.wav'), ('word', 'black'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x025bright.wav'), ('word', 'bright'), ('condition', 'speak')])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
    Routine Instruction_SpeechRep1
    Routine SpeechRepBlock1
  LoopTerminator trials_1_block1
  Routine Rest
  LoopInitiator trials_2_block1 loopType="TrialHandler"
    conditionsFile = words_correct_speak_Generation_Block1.csv
    loopType = random
    nReps = 105
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    conditions:
      [OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x095abuse.wav'), ('word', 'abuse'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x051admired.wav'), ('word', 'admired'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x050adult.wav'), ('word', 'adult'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x032alcoholic.wav'), ('word', 'alcoholic'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x092amateur.wav'), ('word', 'amateur'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x064ancient.wav'), ('word', 'ancient'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x090anguished.wav'), ('word', 'anguished'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x039ankle.wav'), ('word', 'ankle'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x025arrival.wav'), ('word', 'arrival'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x086background.wav'), ('word', 'background'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x018basement.wav'), ('word', 'basement'), ('condition', 'speak')])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
    Routine Instruction_SpeechGen1
    Routine SpeechGenBlock1
  LoopTerminator trials_2_block1
  Routine Rest
  LoopInitiator trials_3_block1 loopType="TrialHandler"
    conditionsFile = words_correct_sing_Repetition_Block1.csv
    loopType = random
    nReps = 105
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    conditions:
      [OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x098adorable.wav'), ('word', 'adorable'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x096adult.wav'), ('word', 'adult'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x002alcoholic.wav'), ('word', 'alcoholic'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x090alive.wav'), ('word', 'alive'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x103ancient.wav'), ('word', 'ancient'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x071animate.wav'), ('word', 'animate'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x073atypical.wav'), ('word', 'atypical'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x032background.wav'), ('word', 'background'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x015beauty.wav'), ('word', 'beauty'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x008black.wav'), ('word', 'black'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block1'), ('file', 'x025bright.wav'), ('word', 'bright'), ('condition', 'sing')])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
    Routine Instruction_SongRep1
    Routine SongRepBlock1
  LoopTerminator trials_3_block1
  Routine Rest
  LoopInitiator trials_4_block1 loopType="TrialHandler"
    conditionsFile = words_correct_sing_Generation_Block1.csv
    loopType = random
    nReps = 105
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    conditions:
      [OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x095abuse.wav'), ('word', 'abuse'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x051admired.wav'), ('word', 'admired'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x050adult.wav'), ('word', 'adult'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x032alcoholic.wav'), ('word', 'alcoholic'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x092amateur.wav'), ('word', 'amateur'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x064ancient.wav'), ('word', 'ancient'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x090anguished.wav'), ('word', 'anguished'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x039ankle.wav'), ('word', 'ankle'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x025arrival.wav'), ('word', 'arrival'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x086background.wav'), ('word', 'background'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block1'), ('file', 'x018basement.wav'), ('word', 'basement'), ('condition', 'sing')])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
    Routine Instruction_SongGen1
    Routine SongGenBlock1
  LoopTerminator trials_4_block1
  Routine Rest
  LoopInitiator trials_1_block2 loopType="TrialHandler"
    conditionsFile = words_correct_speak_Repetition_Block2.csv
    loopType = random
    nReps = 105
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    conditions:
      [OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x170abuse.wav'), ('word', 'abuse'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x122addition.wav'), ('word', 'addition'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x165admired.wav'), ('word', 'admired'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x116afraid.wav'), ('word', 'afraid'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x172amateur.wav'), ('word', 'amateur'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x173angel.wav'), ('word', 'angel'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x128anguished.wav'), ('word', 'anguished'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x203ankle.wav'), ('word', 'ankle'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x163arm.wav'), ('word', 'arm'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x183arrival.wav'), ('word', 'arrival'), ('condition', 'speak')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x107basement.wav'), ('word', 'basement'), ('condition', 'speak')])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
    Routine Instruction_SpeechRep2
    Routine SpeechRepBlock2
  LoopTerminator trials_1_block2
  Routine Rest
  LoopInitiator trials_2_block2 loopType="TrialHandler"
    conditionsFile = words_correct_speak_Generation_Block2.csv
    loopType = random
    nReps = 105
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    conditions:
      [OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x107addition.wav'), ('word', 'addition'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x191adorable.wav'), ('word', 'adorable'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x156afraid.wav'), ('word', 'afraid'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x171alive.wav'), ('word', 'alive'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x199angel.wav'), ('word', 'angel'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x159animate.wav'), ('word', 'animate'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x187arm.wav'), ('word', 'arm'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x131atypical.wav'), ('word', 'atypical'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x111bright.wav'), ('word', 'bright'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x178carefree.wav'), ('word', 'carefree'), ('condition', 'speak')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x206catch.wav'), ('word', 'catch'), ('condition', 'speak')])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
    Routine Instruction_SpeechGen2
    Routine SpeechGenBlock2
  LoopTerminator trials_2_block2
  Routine Rest
  LoopInitiator trials_3_block2 loopType="TrialHandler"
    conditionsFile = words_correct_sing_Repetition_Block2.csv
    loopType = random
    nReps = 105
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    conditions:
      [OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x170abuse.wav'), ('word', 'abuse'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x122addition.wav'), ('word', 'addition'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x165admired.wav'), ('word', 'admired'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x116afraid.wav'), ('word', 'afraid'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x172amateur.wav'), ('word', 'amateur'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x173angel.wav'), ('word', 'angel'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x128anguished.wav'), ('word', 'anguished'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x203ankle.wav'), ('word', 'ankle'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x163arm.wav'), ('word', 'arm'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x183arrival.wav'), ('word', 'arrival'), ('condition', 'sing')]),
      OrderedDict([('task', 'Repetition'), ('block', 'Block2'), ('file', 'x107basement.wav'), ('word', 'basement'), ('condition', 'sing')])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
    Routine Instruction_SongRep2
    Routine SongRepBlock2
  LoopTerminator trials_3_block2
  Routine Rest
  LoopInitiator trials_4_block2 loopType="TrialHandler"
    conditionsFile = words_correct_sing_Generation_Block2.csv
    loopType = random
    nReps = 105
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    conditions:
      [OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x107addition.wav'), ('word', 'addition'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x191adorable.wav'), ('word', 'adorable'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x156afraid.wav'), ('word', 'afraid'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x171alive.wav'), ('word', 'alive'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x199angel.wav'), ('word', 'angel'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x159animate.wav'), ('word', 'animate'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x187arm.wav'), ('word', 'arm'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x131atypical.wav'), ('word', 'atypical'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x111bright.wav'), ('word', 'bright'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x178carefree.wav'), ('word', 'carefree'), ('condition', 'sing')]),
      OrderedDict([('task', 'Generation'), ('block', 'Block2'), ('file', 'x206catch.wav'), ('word', 'catch'), ('condition', 'sing')])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
    Routine Instruction_SongGen2
    Routine SongGenBlock2
  LoopTerminator trials_4_block2
  Routine Finish
